MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Matlab Programs\jb-suite\drivers\srs_830.mdd
DriverType: MATLAB interface object
InstrumentType: Lock-In Amplifier
InstrumentManufacturer: Stanford Research
InstrumentModel: SR830
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property osc_amplitude
    Type: InstrumentCommand
    ConfigureCommand: SLVL
    QueryCommand: SLVL?
    PermissibleType: Double bounded [Max="5.0" Min="0.004"]
    DefaultValue: 0.004
    ReadOnly: never

  Property osc_freq
    Type: InstrumentCommand
    ConfigureCommand: FREQ
    QueryCommand: FREQ?
    PermissibleType: Double bounded [Max="102000.0" Min="0.001"]
    DefaultValue: 0.001
    ReadOnly: never

  Property range
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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g=obj.Interface;
      n=query(g,'SENS?');
      m=obj.sig_mode;
      switch m
          case 'I_lowNoise'
              im='current';
          case 'I_highBW'
              im='current';
          otherwise
              im='voltage';
      end

      names.('current') = {'2fA', '5fA', '10fA', '20fA', '50fA', '100fA', '200fA', '500fA', '1pA',  '2pA',  '5pA',  '10pA',  '20pA',  '50pA',  '100pA', '200pA', '500pA', '1nA', '2nA', '5nA', '10nA', '20nA', '50nA', '100nA', '200nA', '500nA', '1uA'  };
      names.('voltage') = {'2nV', '5nV', '10nV', '20nV', '50nV', '100nV', '200nV', '500nV', '1uV',  '2uV',  '5uV',  '10uV',  '20uV',  '50uV',  '100uV', '200uV', '500uV', '1mV', '2mV', '5mV', '10mV', '20mV', '50mV', '100mV', '200mV', '500mV', '1V'   };

      numeric.('current') = [2E-15, 5E-15, 10E-15, 20E-15, 50E-15, 100E-15, 200E-15, 500E-15, 1E-12,  2E-12,  5E-12,  10E-12,  20E-12,  50E-12,  100E-12, 200E-12, 500E-12, 1E-9,   2E-9,   5E-9,   10E-9,   20E-9,   50E-9,   100E-9, 200E-9, 500E-9, 1E-6  ];
      numeric.('voltge')  = [2E-9,  5E-9,  10E-9,  20E-9,  50E-9,  100E-9,  200E-9,  500E-9,  1E-6,   2E-6,   5E-6,   10E-6,   20E-6,   50E-6,   100E-6,  200E-6,  500E-6,  1E-3,   2E-3,   5E-3,   10E-3,   20E-3,   50E-3,   100E-3, 200E-3, 500E-3, 1     ];

      propertyValue=names.(im){str2num(n)+1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      % set range, possible inputs are: string with range or numeric (next
      % greater range will be selected)

      m=obj.sig_mode;
      switch m
          case 'I_lowNoise'
              im='current';
          case 'I_highBW'
              im='current';
          otherwise
              im='voltage';
      end

      names.('current') = {'2fA', '5fA', '10fA', '20fA', '50fA', '100fA', '200fA', '500fA', '1pA',  '2pA',  '5pA',  '10pA',  '20pA',  '50pA',  '100pA', '200pA', '500pA', '1nA', '2nA', '5nA', '10nA', '20nA', '50nA', '100nA', '200nA', '500nA', '1uA'  };
      names.('voltage') = {'2nV', '5nV', '10nV', '20nV', '50nV', '100nV', '200nV', '500nV', '1uV',  '2uV',  '5uV',  '10uV',  '20uV',  '50uV',  '100uV', '200uV', '500uV', '1mV', '2mV', '5mV', '10mV', '20mV', '50mV', '100mV', '200mV', '500mV', '1V'   };

      numeric.('current') = [2E-15, 5E-15, 10E-15, 20E-15, 50E-15, 100E-15, 200E-15, 500E-15, 1E-12,  2E-12,  5E-12,  10E-12,  20E-12,  50E-12,  100E-12, 200E-12, 500E-12, 1E-9,   2E-9,   5E-9,   10E-9,   20E-9,   50E-9,   100E-9, 200E-9, 500E-9, 1E-6  ];
      numeric.('voltge')  = [2E-9,  5E-9,  10E-9,  20E-9,  50E-9,  100E-9,  200E-9,  500E-9,  1E-6,   2E-6,   5E-6,   10E-6,   20E-6,   50E-6,   100E-6,  200E-6,  500E-6,  1E-3,   2E-3,   5E-3,   10E-3,   20E-3,   50E-3,   100E-3, 200E-3, 500E-3, 1     ];

      names  = names.(im);
      numeric= numeric.(im);

      if(isnumeric(propertyValue))
          ind=find(numeric >= abs(propertyValue),1);
      else
          ind=find(ismember(names,propertyValue));
      end

      if not(isempty(ind))
          g=obj.Interface;
          fprintf(g,sprintf('SENS %d',ind-1));
      else
          error('requested invalid range. Possible ranges are: %s, (%d to %d)',sprintf('%s ',names{:}),numeric(1),numeric(end));
      end
    PermissibleType: Double none
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property ref_harmonic
    Type: InstrumentCommand
    ConfigureCommand: HARM
    QueryCommand: HARM?
    PermissibleType: Double bounded [Max="19999.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never

  Property ref_input
    Type: InstrumentCommand
    ConfigureCommand: FMOD
    QueryCommand: FMOD?
    PermissibleType: String enum [internal=1, front (external)=0]
    DefaultValue: internal
    ReadOnly: never

  Property ref_phase
    Type: InstrumentCommand
    ConfigureCommand: PHAS
    QueryCommand: PHAS?
    PermissibleType: Double bounded [Max="729.99" Min="-360.0"]
    DefaultValue: 0
    ReadOnly: never

  Property ref_trigger
    Type: InstrumentCommand
    ConfigureCommand: RSLP
    QueryCommand: RSLP?
    PermissibleType: String enum [zero crossing=0, TTL rising=1, TTL falling=2]
    DefaultValue: zero crossing
    ReadOnly: never

  Property sig_coupling
    Type: InstrumentCommand
    ConfigureCommand: ICPL
    QueryCommand: ICPL?
    PermissibleType: String enum [AC=0, DC=1]
    DefaultValue: AC
    ReadOnly: never

  Property sig_float
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      val=str2num(query(obj.Interface,'IGND?'));
      if val == 0
          propertyValue=1;
      else
          propertyValue=0;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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if propertyValue==1
          fprintf(obj.Interface,'IGND 0');
      else
          fprintf(obj.Interface,'IGND 1');
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property sig_linefilter
    Type: InstrumentCommand
    ConfigureCommand: ILIN
    QueryCommand: ILIN?
    PermissibleType: String enum [off=0, 50Hz=1, 100Hz=2, 50Hz+100Hz=3]
    DefaultValue: off
    ReadOnly: never

  Property sig_mode
    Type: InstrumentCommand
    ConfigureCommand: ISRC
    QueryCommand: ISRC?
    PermissibleType: String enum [A=0, A-B=1, I_highBW=2, I_lowNoise=3]
    DefaultValue: A
    ReadOnly: never

  Property timeconstant
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      times=[ 10E-6 30E-6 100E-6 300E-6 1E-3 3E-3 10E-3 30E-3 100E-3 300E-3 1 3 10 30 100 300 1E3 3E3 10E3 30E3];

      g=obj.Interface;
      n=query(g,'OFLT?');
      propertyValue=times(str2num(n)+1);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      times=[ 10E-6 30E-6 100E-6 300E-6 1E-3 3E-3 10E-3 30E-3 100E-3 300E-3 1 3 10 30 100 300 1E3 3E3 10E3 30E3];
      [idx idx]=min(abs(times-propertyValue));

      g=obj.Interface;
      fprintf(g,sprintf('OFLT %d',idx-1));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
